CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:DNA
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:FilteredImage
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:10
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
Threshold:[module_num:7|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertImageToObjects:[module_num:8|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
    Select the input image:Threshold
    Name the output object:Tissue
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:1
    Connectivity:0

ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:Tissue
    Name the output objects:ShrunkenTissue
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:30
    Fill holes in objects so that all objects shrink to a single point?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:ShrunkenTissue
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:11|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
    Select the objects to filter:ShrunkenTissue
    Name the output objects:ShrunkenTissue2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.9
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
ExportToSpreadsheet:[module_num:12|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
InvertForPrinting:[module_num:13|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
    Input image type:Grayscale
    Use a red image?:Yes
    Select the red image:DNA
    Use a green image?:Yes
    Select the green image:DNA
    Use a blue image?:Yes
    Select the blue image:DNA
    Select the color image:DNA
    Output image type:Color
    Select "*Yes*" to produce a red image.:Yes
    Name the red image:InvertedRed
    Select "*Yes*" to produce a green image.:Yes
    Name the green image:InvertedGreen
    Select "*Yes*" to produce a blue image.:Yes
    Name the blue image:InvertedBlue
    Name the inverted color image:InvertedColor

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:InvertedColor
    Name the primary objects to be identified:Depositions
    Typical diameter of objects, in pixel units (Min,Max):4,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.25,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

MeasureObjectIntensityDistribution:[module_num:15|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enabled:False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
    Select images to measure:InvertedColor
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:Magnitudes only
    Maximum zernike moment:9
    Select objects to measure:Depositions
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Tissue
    Scale the bins?:No
    Number of bins:25
    Maximum radius:100
    Image:None
    Objects to display:Do not use
    Number of bins:4
    Measurement:Radial CV
    Color map:BuGn_r
    Save display as image?:No
    Output image name:Heatmap

RelateObjects:[module_num:16|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
    Parent objects:ShrunkenTissue2
    Child objects:Depositions
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:DepositionsinTissue
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
MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:DepositionsinTissue, ShrunkenTissue2
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:18|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
    Select images to measure:InvertedColor
    Select objects to measure:DepositionsinTissue

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:DepositionsinTissue|Intensity_IntegratedIntensity_InvertedColor,DepositionsinTissue|Intensity_MassDisplacement_InvertedColor,DepositionsinTissue|Intensity_StdIntensityEdge_InvertedColor,DepositionsinTissue|Intensity_MaxIntensityEdge_InvertedColor,DepositionsinTissue|Intensity_MADIntensity_InvertedColor,DepositionsinTissue|Intensity_UpperQuartileIntensity_InvertedColor,DepositionsinTissue|Intensity_StdIntensity_InvertedColor,DepositionsinTissue|Intensity_IntegratedIntensityEdge_InvertedColor,DepositionsinTissue|Intensity_MinIntensityEdge_InvertedColor,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:pRions_v3_
    Overwrite existing files without warning?:No
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